<?
include_once ($template_directory . 'prepare_variables.php');
?> 

File_New
;

! Use filtered data for link model based and force signals
Set_Use_Processed_Analog
/USE_PROCESSED=TRUE
;

Set_Use_Processed_Targets
/USE_PROCESSED=TRUE
! /RECALC=TRUE
;

Set_Pipeline_Parameter
/PARAMETER_NAME=working_directory
/PARAMETER_VALUE=<?=$working_directory;?> 
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! /MULTI_PASS=FALSE
;

Set_Pipeline_Parameter
/PARAMETER_NAME=template_directory
/PARAMETER_VALUE=<?=$template_directory;?> 
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;

!=============================
!Open files
!=============================
<?
// Load movement files and add tags.
foreach($measurements as $m) {
	if(strstr($m["Used"], "True") && strpos($m['Measurement_type'], 'Dynamic') !== false) {
		$path_parts 	= pathinfo($m["Filename"]);
		//print_r($path_parts);
?> 

		File_Open
		/FILE_NAME=pose_filt.c3d
		/FILE_PATH=<?=$working_directory;?>TheiaFormatData\<?=$path_parts['filename'];?>
		/SEARCH_SUBFOLDERS=FALSE
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		/SET_PROMPT=Open pose_filt.c3d
		! /ON_FILE_NOT_FOUND=PROMPT
		/FILE_TYPES_ON_PROMPT=c3d
		;

		! Rename file to get unique name
		File_Rename
		/EXISTING_FILE_NAME=<?=$working_directory;?>TheiaFormatData\<?=$path_parts['filename'];?>\pose_filt.c3d
		/NEW_FILE_NAME=<?=$path_parts['filename'];?> 
		/USE_SEARCH_REPLACE=TRUE
		/SEARCH_FOR=pose_filt.c3d
		/REPLACE_WITH=<?=$path_parts['filename'];?> 
		! /REMOVE_FILE_PATH=FALSE
		/RENAME_STATIC_CALIBRATION_FILES=FALSE
		;

<?	}
}?> 

! Add tags
Assign_Tags_To_Files
/MOTION_FILE_NAMES=*Dynamic*
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/TAGS=Dynamic
;

Set_Subject_Tag
/CALIBRATION_FILE=*SUBJECT0*
/SUBJECT_PREFIX=SUBJECT0FILT:
/SUBJECT_TAGS=SUBJECT0
! /REMOVE_EXISTING_TAGS=FALSE
;

Set_Subject_Tag
/CALIBRATION_FILE=*SUBJECT1*
/SUBJECT_PREFIX=SUBJECT1FILT:
/SUBJECT_TAGS=SUBJECT1
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;

Select_Active_File
/FILE_NAME=*Dynamic 1*
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/SUBJECT_TAGS=SUBJECT0
;

Set_Subject_Mass
/CALIBRATION_FILE=*SUBJECT0*
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! /PROMPT_SIZE=90
/WEIGHT=<?=$session["Weight"]?> 
! /UNITS=Kg
;

Set_Subject_Height
/CALIBRATION_FILE=*SUBJECT0*
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/HEIGHT=<?=$subject["Height"]?> 
! /UNITS=m
;

Append_Model_Template
/CALIBRATION_FILE=*SUBJECT0*
/SUBJECT_PREFIX=SUBJECT0FILT:
/MODEL_TEMPLATE=<?=$template_directory;?>append_model.mdh
! /VIEW_BUILDMODEL_RESULTS=2
;

Select_Active_File
/FILE_NAME=*Dynamic 2*
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/SUBJECT_TAGS=SUBJECT1
;

Set_Subject_Mass
/CALIBRATION_FILE=*SUBJECT1*
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/WEIGHT=<?=$session["Weight"]?> 
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;

Set_Subject_Height
/CALIBRATION_FILE=*SUBJECT1*
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/HEIGHT=<?=$subject["Height"]?> 
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;

Append_Model_Template
/CALIBRATION_FILE=*SUBJECT1*
/SUBJECT_PREFIX=SUBJECT1FILT:
/MODEL_TEMPLATE=<?=$template_directory;?>append_model.mdh
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;

Build_Model
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/REBUILD_ALL_MODELS=TRUE
! /DISPLAY_RESULTS=TRUE
;

Select_Active_File
/FILE_NAME=ALL_FILES
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/SUBJECT_TAGS=ALL_SUBJECTS
;

!===========================================
!Define virtual lab orientation based on pelvis orientation
!===========================================

! Add TARGET Lab orientation (used to set orientation of Virtual lab)
! ==================================

! A unit vector is defined between the right and left hip landmarks, then rounded to yield 4 possible solutions ( +/- X-axis and +/- y-axis)
! A target is created that contains that unit_vector at every frame of data.
! The virtual_lab will be tracked by the new TARGET.

! Note this algorithm will NOT work properly if pelvis rotates along vertical axis during dynamic trials
! Note LHIP and RHIP landmarks must exist to apply this algorithm.

! Create a unit vector between left and right hips
Evaluate_Expression
/EXPRESSION=UNIT_VECTOR(
	(LANDMARK::ORIGINAL::RHIP::X - LANDMARK::ORIGINAL::LHIP::X), 
	(LANDMARK::ORIGINAL::RHIP::Y - LANDMARK::ORIGINAL::LHIP::Y), 
	(LANDMARK::ORIGINAL::RHIP::Z - LANDMARK::ORIGINAL::LHIP::Z)) 
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! /SIGNAL_FOLDER=ORIGINAL 
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/RESULT_TYPES=DERIVED 
/RESULT_FOLDERS=VIRTUAL_LAB 
/RESULT_NAME=HIP_VECTOR 
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE 
; 

! Compute the median value of the unit vector
Metric_Median
/RESULT_METRIC_FOLDER=VIRTUAL_LAB
/RESULT_METRIC_NAME=_MED
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=TRUE
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=VIRTUAL_LAB
/SIGNAL_NAMES=HIP_VECTOR
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
! /APPEND_TO_EXISTING_VALUES=FALSE
;

! Round the floats to an integer 
Evaluate_Expression 
/EXPRESSION=ROUND(METRIC::VIRTUAL_LAB::HIP_VECTOR_MED) 
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/RESULT_TYPES=METRIC 
/RESULT_FOLDERS=VIRTUAL_LAB 
/RESULT_NAME=LAB_LATERAL 
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; 

! Create a new TARGET that has the rounded unit vector at every frame. 
Create_Target 
/SIGNAL_NAMES=Lab orientation
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/EXPRESSION=METRIC::VIRTUAL_LAB::LAB_LATERAL 
; 

! End of virtual lab definition 
! =========================================

!====================================================
! Load report template
! Note: template includes joint angle definitions 
!====================================================

Open_Report_Template
/REPORT_TEMPLATE=<?=$template_directory;?>report.rgt
! /SET_PROMPT=Open report template
;

<?
include_once ($template_directory . 'add_meta_data_to_report.v3s');
?> 

Call_Script
/SCRIPT_FILE_NAME=<?=$template_directory . 'processing.v3s'; ?> 
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;

Recalc
;

!====================================================
! Export LINK_MODEL_BASED signals to .xml
!====================================================

Export_Data_To_Ascii_File
/FILE_NAME=<?=$working_directory;?>session_data.xml
/SIGNAL_TYPES=LINK_MODEL_BASED
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
/USE_XML_FORMAT=TRUE
! /USE_JSON_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /CREATE_FOLDER_PATH=TRUE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

!====================================================
!Save cmz
!====================================================

File_Save_As
/FILE_NAME=<?=$working_directory;?>Report.cmz
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! /SET_PROMPT=Save CMZ file as
! /SAVE_EMBEDDED_GRAPHICS=FALSE
! /CREATE_FOLDER_PATH=FALSE
;